PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'session': '001', 'participant': '', 'counterbalance': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [800, 600]
  expName = simon_task
  keyboardBackend = ioHub
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Routines
  Routine simon_setup
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    CodeComponent simon_config
      Code Type = Auto->JS
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      Begin Routine:
        left_stim_color = 'none'
        right_stim_color = 'none'
        left_stim_text = 'none'
        right_stim_text = 'none'
        ans = 'none'

        if not expInfo['counterbalance']:
            expInfo['counterbalance'] = '0'

        if expInfo['counterbalance'] == '0':
            bindings = {'X': 'm', 'O': 'z'}
            if condition == 'incongruent':
                if stim == 'X':
                    left_stim_text = stim
                    right_stim_text = ''
                    left_stim_color = 'red'
                    ans = 'm'
                elif stim == 'O':
                    left_stim_text = ''
                    right_stim_text = stim
                    right_stim_color = 'blue'
                    ans = 'z'
            elif condition == 'congruent':
                if stim == 'X':
                    left_stim_text = ''
                    right_stim_text = stim
                    right_stim_color = 'red'
                    ans = 'm'
                elif stim == 'O':
                    left_stim_text = stim
                    left_stim_color = 'blue'
                    right_stim_text = ''
                    ans='z'
        elif expInfo['counterbalance'] == '1':
            bindings = {'O': 'm', 'X': 'z'}
            if 'condition' == 'incongruent':
                if stim == 'X':
                    left_stim_text = ''
                    right_stim_text = stim
                    right_stim_color = 'blue'
                    ans = 'z'
                elif stim == 'O':
                    left_stim_text = stim
                    left_stim_color = 'red'
                    right_stim_text = ''
                    ans = 'm'
            elif 'condition' == 'congruent':
                if stim == 'X':
                    left_stim_text = stim
                    left_stim_color = 'blue'
                    right_stim_text = ''
                    ans = 'z'
                elif stim == 'O':
                    left_stim_text = ''
                    right_stim_text = stim
                    right_stim_color = 'red'
                    ans = 'm'
  Routine simon_trial
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    TextComponent fixation_cross
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent left_stim
      color [set every repeat] = $left_stim_color
      letterHeight = 0.5
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $left_stim_text
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    TextComponent right_stim
      color [set every repeat] = $right_stim_color
      letterHeight = 0.5
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $right_stim_text
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    TextComponent ITI
      letterHeight = 0.5
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent resp
      allowedKeys = 'z','m'
      correctAns = $ans
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      store = first key
      storeCorrect = True
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    PolygonComponent left_image
      fillColor [set every repeat] = $left_stim_color
      lineColor [set every repeat] = $left_stim_color
      pos = (-.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent right_image
      fillColor [set every repeat] = $right_stim_color
      lineColor [set every repeat] = $right_stim_color
      pos = (.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine prac_instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Basic Simon Task

        Onscren you will seee either a 'O' or an 'X' as a target. Your task is to identify the target.

        If you see an 'O' press 'z' on the keyboard
        If you see an 'X' press 'm' on the keyboard

        The first 10 trials that follow this screen are practice trials.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine trial_instructions
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        You are now moving onto the test phase. This part of the experiment will involve 10 trials.

        The requirements are the same as the practice block - identify the target that is presented.

        If you see an 'O' press 'z' on the keyboard
        If you see an 'X' press 'm' on the keyboard

        Press the spacebar to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine prac_config
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['counterbalance'] == '0':
            bindings = {'X': 'm', 'O': 'z'}
            if thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans='z'
            elif expInfo['counterbalance'] == '1':
                bindings = {'O': 'm', 'X': 'z'}
                if thisTrial['condition'] == 'congruent':
                    if thisTrial['stim'] == 'X':
                        left_stim_text = thisTrial['stim']
                        right_stim_text = ''
                        ans = 'z'
                    elif thisTrial['stim'] == 'O':
                        left_stim_text = ''
                        right_stim_text = thisTrial['stim']
                        ans = 'm'
Flow
  Routine prac_instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = simon_prac_order.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')])]
    Routine simon_setup
    Routine simon_trial
  LoopTerminator practice
  Routine trial_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = simon_task_order.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('condition', 'incongruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')])]
    Routine simon_setup
    Routine simon_trial
  LoopTerminator trials
